CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:30
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Cy5")
    Name to assign these images:Red
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "FITC")
    Name to assign these images:Green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "dsRed")
    Name to assign these images:Orange
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "mask")
    Name to assign these images:mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cyoriginal")
    Name to assign these images:R
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Threshold:[module_num:5|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
    Select the input image:R
    Name the output image:cellshape
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:2
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Smooth:[module_num:6|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
    Select the input image:cellshape
    Name the output image:smoothcell
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:50
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:smoothcell
    Name the primary objects to be identified:cells
    Typical diameter of objects, in pixel units (Min,Max):500,1000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.2
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0,1
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:mask
    Name the primary objects to be identified:nucleus
    Typical diameter of objects, in pixel units (Min,Max):100,200
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:9|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
    Select the input objects:nucleus
    Name the output objects:Expandednucleus
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:20
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
ExpandOrShrinkObjects:[module_num:10|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
    Select the input objects:nucleus
    Name the output objects:ExpandednucleusforCell
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:100
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:R
    Name the primary objects to be identified:IdentifyLysosome
    Typical diameter of objects, in pixel units (Min,Max):8,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Red
    Name the output image:outline15pixels
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FF0000
    Select objects to display:Expandednucleus

RelateObjects:[module_num:13|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
    Parent objects:Expandednucleus
    Child objects:IdentifyLysosome
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:perinuclearLysosome
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
OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Red
    Name the output image:PerinuclearLysosome
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:perinuclearLysosome

OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Red
    Name the output image:Cell_outline
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:cells

MaskObjects:[module_num:16|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
    Select objects to be masked:IdentifyLysosome
    Name the masked objects:NonperinuclearLysosome
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:perinuclearLysosome
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

RelateObjects:[module_num:17|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
    Parent objects:ExpandednucleusforCell
    Child objects:cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:filteredCell
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
RelateObjects:[module_num:18|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
    Parent objects:filteredCell
    Child objects:NonperinuclearLysosome
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:nonperinuclearLysosome
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
OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Red
    Name the output image:NonperinuclearLysosome
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:nonperinuclearLysosome

MaskObjects:[module_num:20|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
    Select objects to be masked:perinuclearLysosome
    Name the masked objects:MaskedPlysosome
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:perinuclearLysosome
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:21|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
    Select objects to be masked:nonperinuclearLysosome
    Name the masked objects:MaskedNPlysosome
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:NonperinuclearLysosome
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectIntensity:[module_num:22|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
    Select images to measure:Red
    Select objects to measure:nonperinuclearLysosome

MeasureObjectIntensity:[module_num:23|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
    Select images to measure:Red
    Select objects to measure:perinuclearLysosome

MeasureObjectIntensity:[module_num:24|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
    Select images to measure:Green
    Select objects to measure:nonperinuclearLysosome

MeasureObjectIntensity:[module_num:25|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
    Select images to measure:Green
    Select objects to measure:perinuclearLysosome

MeasureObjectIntensity:[module_num:26|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
    Select images to measure:Orange
    Select objects to measure:nonperinuclearLysosome

MeasureObjectIntensity:[module_num:27|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
    Select images to measure:Orange
    Select objects to measure:perinuclearLysosome

MeasureObjectSizeShape:[module_num:28|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
    Select object sets to measure:nonperinuclearLysosome
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectSizeShape:[module_num:29|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
    Select object sets to measure:perinuclearLysosome
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:30|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop/Measure_Result
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_D4C5
    Overwrite existing files without warning?:Yes
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