CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Brightfield")
    Name to assign these images:bf
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyObjectsManually:[module_num:5|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
    Select the input image:bf
    Name the objects to be identified:Cells

MaskObjects:[module_num:6|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
    Select objects to be masked:Cells
    Name the masked objects:MaskedNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:7|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
    Select the input objects:MaskedNuclei
    Name the output image:CellImage
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:bf
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop/masks
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
